<?xml version="1.0" encoding="ISO-8859-1"?>
<config>

  <!-- The starting directory. -->
  <directory type="directory">E:/default/</directory>

  <!-- The setup name -->
  <setup_name type="string">Yuan_test</setup_name>

  <!-- The ui type, this is 'classic' or 'detached' -->
  <ui_type type="string">detached</ui_type>

  <!--
      This has two effects:
      
      (1) If this is True any exception will immediately crash HAL, which can
      be useful for debugging. If it is False then some exceptions will be
      handled by the modules.
      
      (2) If it is False we also don't check whether messages are valid.
  -->
  <strict type="boolean">True</strict>
  
  <!--
      Define the modules to use for this setup.
  -->
  <modules>

    <!--
	This is the main window, you must have this.
    -->
    <hal>
			<class_name type="string">HalController</class_name>
      <module_name type="string">storm_control.hal4000.hal4000</module_name>
    </hal>

    <!--
	You also need all of these.
    -->

    <!-- Camera display. -->
    <display>
      <class_name type="string">Display</class_name>
      <module_name type="string">storm_control.hal4000.display.display</module_name>
      <parameters>

				<!-- The default color table. Other options are in hal4000/colorTables/all_tables -->
				<colortable type="string">idl5.ctbl</colortable>
				
      </parameters>
    </display>
    
    <!-- Feeds. -->
    <feeds>
      <class_name type="string">Feeds</class_name>
      <module_name type="string">storm_control.hal4000.feeds.feeds</module_name>
      <configuration>
		    <illumination_functionality type="string">illumination</illumination_functionality>
	    </configuration>
    </feeds>

    <!-- Filming and starting/stopping the camera. -->
    <film>
      <class_name type="string">Film</class_name>
      <module_name type="string">storm_control.hal4000.film.film</module_name>

      <!-- Film parameters specific to this setup go here. -->
      <parameters>
				<extension desc="Movie file name extension" type="string" values=",Red,Green,Blue"></extension>
      </parameters>
    </film>

    <!-- Which objective is being used, etc. -->
    <mosaic>
      <class_name type="string">Mosaic</class_name>
      <module_name type="string">storm_control.hal4000.mosaic.mosaic</module_name>

      <!-- List objectives available on this setup here. -->
      <parameters>
				<flip_horizontal desc="Flip image horizontal (mosaic)" type="boolean">False</flip_horizontal>
				<flip_vertical desc="Flip image vertical (mosaic)" type="boolean">False</flip_vertical>
				<transpose desc="Transpose image (mosaic)" type="boolean">False</transpose>

				<objective desc="Current objective" type="string" values="obj1,obj2,obj3">obj1</objective>
				<obj1 desc="Objective 1" type="custom">100x,0.160,0.0,0.0</obj1>
				<obj2 desc="Objective 2" type="custom">10x,1.60,0.0,0.0</obj2>
				<obj3 desc="Objective 3" type="custom">4x,4.0,0.0,0.0</obj3>	
      </parameters>
    </mosaic>

    <!-- Loading, changing and editting settings/parameters -->
    <settings>
      <class_name type="string">Settings</class_name>
      <module_name type="string">storm_control.hal4000.settings.settings</module_name>
    </settings>

    <!-- Set the time base for films. -->
    <timing>
      <class_name type="string">Timing</class_name>
      <module_name type="string">storm_control.hal4000.timing.timing</module_name>
      <parameters>
				<time_base type="string">camera1</time_base>
      </parameters>
    </timing>
  
    <!--
			Everything else is optional, but you probably want at least one camera.
    -->
  <camera1>
      <class_name type="string">Camera</class_name>
      <module_name type="string">storm_control.hal4000.camera.camera</module_name>
      <camera>
        <master type="boolean">True</master>
        <class_name type="string">NoneCameraControl</class_name>
        <module_name type="string">storm_control.hal4000.camera.noneCameraControl</module_name>
        <parameters>
          
          <!-- This is specific to the emulated camera. -->
          <roll type="float">1.0</roll>

                <!-- These should be specified for every camera, and cannot be changed
               in HAL when running. -->
          <!-- These are the display defaults, not the camera range. -->
          <default_max type="int">300</default_max> 
          <default_min type="int">0</default_min>
          <flip_horizontal type="boolean">False</flip_horizontal>
          <flip_vertical type="boolean">False</flip_vertical>
          <transpose type="boolean">False</transpose>

          <!-- These can be changed / editted. -->

          <!-- This is the extension to use (if any) when saving data from this camera. -->
          <extension type="string"></extension>
          
          <!-- Whether or not data from this camera is saved during filming. -->
          <saved type="boolean">True</saved>

        </parameters>
      </camera>
    </camera1>

    <!-- AOTF control -->
    <aotf>
      <module_name type="string">storm_control.sc_hardware.crystalTechnologies.aotfModule</module_name>
      <class_name type="string">AOTF64BitModule</class_name>

      <configuration>
        <use_fsk type="boolean">True</use_fsk>
        <fsk_mode type="int">1</fsk_mode>
        <python32_exe type="string">C:/Users/yxt5273/AppData/Local/Programs/Python/Python38-32/python</python32_exe>
        
        <!-- These are the things that we provide AOTF functionality for.
             Other modules will request them with a 'get functionality'
             message and "name" = "aotf.xxx". -->

        <ilm642>
          <channel type="int">2</channel>
          <on_frequency type="float">91.1</on_frequency>
          <off_frequency type="float">20</off_frequency>
          <maximum type="int">9700</maximum>
        </ilm642>
        <ilm560>
          <channel type="int">1</channel>
          <on_frequency type="float">108.21</on_frequency>
          <off_frequency type="float">20</off_frequency>
          <maximum type="int">9200</maximum>
        </ilm560>
        <ilm488>
          <channel type="int">0</channel>
          <on_frequency type="float">130.24</on_frequency>
          <off_frequency type="float">20</off_frequency>
          <maximum type="int">9700</maximum>
        </ilm488>
  
      </configuration>
    </aotf>

    <daq>
      <module_name type="string">storm_control.sc_hardware.nationalInstruments.nidaqModule</module_name>
      <class_name type="string">NidaqModule</class_name>

      <configuration>

        <timing>
          <camera_fire_pin type="string">/Dev1/PFI0</camera_fire_pin>
          <counter type="string">/Dev1/ctr0</counter>
          <counter_out type="string">/Dev1/ctr2out</counter_out>
        </timing>


        <ilm642>
          <ao_task>
            <source type="string">/Dev1/ao2</source>
          </ao_task>
        </ilm642>

        <ilm642sh>
          <do_task>
            <source type="string">/Dev1/port0/line2</source>
          </do_task>
        </ilm642sh>

        <ilm560>
          <ao_task>
            <source type="string">/Dev1/ao1</source>
          </ao_task>
        </ilm560>

        <ilm560sh>
          <do_task>
            <source type="string">/Dev1/port0/line1</source>
          </do_task>
        </ilm560sh>


        <ilm488>
          <ao_task>
            <source type="string">/Dev1/ao0</source>
          </ao_task>
        </ilm488>      

        <ilm488sh>
          <do_task>
            <source type="string">/Dev1/port0/line0</source>
          </do_task>
        </ilm488sh>


      </configuration>
    </daq>    


        <!-- Illumination (lasers, shutters, etc) control GUI. -->
    <illumination>
      <class_name type="string">Illumination</class_name>
      <module_name type="string">storm_control.hal4000.illumination.illumination</module_name>
      <configuration>

       <!-- Note: The name of the channel is the gui_name.
           XML tags cannot start with numbers. -->
      <ch1>
        <gui_name type="string">642</gui_name>
        <color type="string">255,0,0</color>
        <amplitude_modulation>
          <hw_fn_name>aotf.ilm642</hw_fn_name>
        </amplitude_modulation>

        <analog_modulation>
          <hw_fn_name type="string">daq.ilm642.ao_task</hw_fn_name>
          <max_voltage type="float">1.0</max_voltage>
          <min_voltage type="float">0.0</min_voltage>
        </analog_modulation>   

        <mechanical_shutter>
          <hw_fn_name type="string">daq.ilm642sh.do_task</hw_fn_name>
        </mechanical_shutter> 

      </ch1>

      <ch2>
        <gui_name type="string">560</gui_name>
        <color type="string">255,255,0</color>
        <amplitude_modulation>
          <hw_fn_name>aotf.ilm560</hw_fn_name>
        </amplitude_modulation>

        <analog_modulation>
          <hw_fn_name type="string">daq.ilm560.ao_task</hw_fn_name>
          <max_voltage type="float">1.0</max_voltage>
          <min_voltage type="float">0.0</min_voltage>
        </analog_modulation>   

        <mechanical_shutter>
          <hw_fn_name type="string">daq.ilm560sh.do_task</hw_fn_name>
        </mechanical_shutter>

      </ch2>

      <ch3>
        <gui_name type="string">488</gui_name>
        <color type="string">0,255,255</color>
        <amplitude_modulation>
          <hw_fn_name>aotf.ilm488</hw_fn_name>
        </amplitude_modulation>

        <analog_modulation>
          <hw_fn_name type="string">daq.ilm488.ao_task</hw_fn_name>
          <max_voltage type="float">1.0</max_voltage>
          <min_voltage type="float">0.0</min_voltage>
        </analog_modulation>  

        <mechanical_shutter>
          <hw_fn_name type="string">daq.ilm488sh.do_task</hw_fn_name>
        </mechanical_shutter>


      </ch3>

      </configuration>
    </illumination>

  </modules>
  
</config>
