<?xml version="1.0" encoding="ISO-8859-1"?>
<config>

	<!-- The starting directory. -->
	<directory type="directory">C:/Data/</directory>

	<!-- The setup name -->
	<setup_name type="string">storm1</setup_name>

	<!-- The ui type, this is 'classic' or 'detached' -->
	<ui_type type="string">detached</ui_type>

	<!--
      This has two effects:

      (1) If this is True any exception will immediately crash HAL, which can
      be useful for debugging. If it is False then some exceptions will be
      handled by the modules.

      (2) If it is False we also don't check whether messages are valid.
  -->
  <strict type="boolean">True</strict>

  <!--
      Define the modules to use for this setup.
  -->
  <modules>

	  <!--
		This is the main window, you must have this.
    -->
    <hal>
	    <class_name type="string">HalController</class_name>
	    <module_name type="string">storm_control.hal4000.hal4000</module_name>
    </hal>

    <!--
			You also need all of these.
    -->

    <!-- Camera display. -->
    <display>
	    <class_name type="string">Display</class_name>
	    <module_name type="string">storm_control.hal4000.display.display</module_name>
	    <parameters>

		    <!-- The default color table. Other options are in hal4000/colorTables/all_tables -->
		    <colortable type="string">idl5.ctbl</colortable>

	    </parameters>
    </display>

    <!-- Feeds. -->
    <feeds>
	    <class_name type="string">Feeds</class_name>
	    <module_name type="string">storm_control.hal4000.feeds.feeds</module_name>
	    <configuration>
		    <illumination_functionality type="string">illumination</illumination_functionality>
	    </configuration>
    </feeds>

    <!-- Filming and starting/stopping the camera. -->
    <film>
	    <class_name type="string">Film</class_name>
	    <module_name type="string">storm_control.hal4000.film.film</module_name>

	    <!-- Film parameters specific to this setup go here. -->
	    <parameters>
		    <extension desc="Movie file name extension" type="string" values=",A647,Cy5,Cy3,Cy2,A405,FITC,YFP,GFP,BF"></extension>
	    </parameters>
    </film>

    <!-- Which objective is being used, etc. -->
    <mosaic>
	    <class_name type="string">Mosaic</class_name>
	    <module_name type="string">storm_control.hal4000.mosaic.mosaic</module_name>

	    <!-- List objectives available on this setup here. -->
	    <parameters>
		    <flip_horizontal desc="Flip image horizontal (mosaic)" type="boolean">False</flip_horizontal>
		    <flip_vertical desc="Flip image vertical (mosaic)" type="boolean">False</flip_vertical>
		    <transpose desc="Transpose image (mosaic)" type="boolean">False</transpose>

		    <objective desc="Current objective" type="string" values="obj1,obj2">obj1</objective>
		    <obj1 desc="Objective 1" type="custom">100x,0.160,0.0,0.0</obj1>
		    <obj2 desc="Objective 2" type="custom">4x,4.0,0.0,0.0</obj2>	
	    </parameters>
    </mosaic>

    <!-- Loading, changing and editting settings/parameters -->
    <settings>
	    <class_name type="string">Settings</class_name>
	    <module_name type="string">storm_control.hal4000.settings.settings</module_name>
    </settings>

    <!-- Set the time base for films. -->
    <timing>
	    <class_name type="string">Timing</class_name>
	    <module_name type="string">storm_control.hal4000.timing.timing</module_name>
	    <parameters>
		    <time_base type="string">camera1</time_base>
	    </parameters>
    </timing>

    <!--
			Everything else is optional, but you probably want at least one camera.
    -->

    <!-- Camera control. -->
    <!--
			Note that the cameras must have the names "camera1", "camera2", etc..

			Cameras are either "master" (they provide their own hardware timing)
			or "slave" they are timed by another camera. Each time the cameras
			are started the slave cameras are started first, then the master cameras.
    -->

    <camera1>
	    <class_name type="string">Camera</class_name>
	    <module_name type="string">storm_control.hal4000.camera.camera</module_name>
	    <camera>
		    <master type="boolean">True</master>
		    <class_name type="string">AndorCameraControl</class_name>
		    <module_name type="string">storm_control.hal4000.camera.andorCameraControl</module_name>
		    <parameters>

			    <!-- The location of the Andor DLL. -->
			    <andor_path type="string">C:/Program Files/Andor SOLIS/</andor_path>

			    <!-- The name of the Andor DLL. -->
			    <andor_dll type="string">atmcd64d.dll</andor_dll>

			    <!-- Which camera to use -->
			    <camera_id type="int">0</camera_id>

			    <!-- These are the display defaults, not the camera range. -->
			    <default_max type="int">2000</default_max> 
			    <default_min type="int">100</default_min>
			    <flip_horizontal type="boolean">False</flip_horizontal>
			    <flip_vertical type="boolean">False</flip_vertical>
			    <transpose type="boolean">False</transpose>

			    <!-- These can be changed / editted. -->

			    <!-- This is the extension to use (if any) when saving data from this camera. -->
			    <extension type="string"></extension>

			    <!-- Whether or not data from this camera is saved during filming. -->
			    <saved type="boolean">True</saved>

		    </parameters>
	    </camera>
    </camera1>

        <!-- AOTF control -->
    <aotf>
      <module_name type="string">storm_control.sc_hardware.none.noneAOTFModule</module_name>
      <class_name type="string">NoneAOTFModule</class_name>

      <configuration>
				<off_frequency type="float">20.0</off_frequency>
				<used_during_filming type="boolean">True</used_during_filming>
				
				<!-- These are the things that we provide AOTF functionality for.
				     Other modules will request them with a 'get functionality'
				     message and "name" = "aotf.xxx". -->

				<ilm647>
				  <channel type="int">0</channel>
				  <frequency type="float">90.0</frequency>
				  <maximum type="int">5000</maximum>
				</ilm647>
				<ilm561>
				  <channel type="int">1</channel>
				  <frequency type="float">108.0</frequency>
				  <maximum type="int">4000</maximum>
				</ilm561>
				<ilm488>
				  <channel type="int">2</channel>
				  <frequency type="float">131.0</frequency>
				  <maximum type="int">3000</maximum>
				</ilm488>
	
      </configuration>
    </aotf>

    <daq>
	    <module_name type="string">storm_control.sc_hardware.nationalInstruments.nidaqModule</module_name>
	    <class_name type="string">NidaqModule</class_name>

	    <configuration>

		    <timing>
			    <camera_fire_pin type="string">/Dev2/PFI0</camera_fire_pin>
			    <counter type="string">/Dev2/ctr0</counter>
			    <counter_out type="string">/Dev2/ctr0out</counter_out>
		    </timing>


		    <ilm647>
			    <ao_task>
				    <source type="string">/Dev2/ao0</source>
			    </ao_task>
		    </ilm647>

		    <ilm647sh>
			    <do_task>
				    <source type="string">/Dev2/port0/line0</source>
			    </do_task>
		    </ilm647sh>

		    <ilm561>
			    <ao_task>
				    <source type="string">/Dev2/ao1</source>
			    </ao_task>
		    </ilm561>

		    <ilm561sh>
			    <do_task>
				    <source type="string">/Dev2/port0/line1</source>
			    </do_task>
		    </ilm561sh>


		    <ilm532>
			    <ao_task>
				    <source type="string">/Dev2/ao2</source>
			    </ao_task>
		    </ilm532>

		    <ilm514>
			    <ao_task>
				    <source type="string">/Dev2/ao3</source>
			    </ao_task>
		    </ilm514>

		    <ilm488>
			    <ao_task>
				    <source type="string">/Dev2/ao4</source>
			    </ao_task>
		    </ilm488>      

		    <ilm488sh>
			    <do_task>
				    <source type="string">/Dev2/port0/line4</source>
			    </do_task>
		    </ilm488sh>


		    <ilm405>
			    <ao_task>
				    <source type="string">/Dev2/ao6</source>
			    </ao_task>
		    </ilm405>

		    
		    <ir_laser>
			    <ct_task>
				    <source type="string">/Dev1/ctr0</source>
				    <frequency type="float">50000</frequency>
			    </ct_task>
		    </ir_laser>


			<!-- i don't think we need these for the usb mcl control only-->
			<!--
			<mcl>
			  <ao_task>
				<source type="string">/Dev1/ao0</source>
			  </ao_task>
			</mcl>
			-->
	
	    </configuration>
    </daq>    

    <!-- Illumination (lasers, shutters, etc) control GUI. -->
    <illumination>
	    <class_name type="string">Illumination</class_name>
	    <module_name type="string">storm_control.hal4000.illumination.illumination</module_name>
	    <configuration>

		    <!-- Note: The name of the channel is the gui_name.
	     XML tags cannot start with numbers. -->
				<ch1>
					<gui_name type="string">647</gui_name>
					<color type="string">255,0,0</color>
					<amplitude_modulation>
						<hw_fn_name>ctech_aotf.ch647</hw_fn_name>
					</amplitude_modulation>

					<analog_modulation>
						<hw_fn_name type="string">daq.ilm647.ao_task</hw_fn_name>
						<max_voltage type="float">1.0</max_voltage>
						<min_voltage type="float">0.0</min_voltage>
					</analog_modulation>   

					<mechanical_shutter>
						<hw_fn_name type="string">daq.ilm647sh.do_task</hw_fn_name>
					</mechanical_shutter>	

				</ch1>

				<ch2>
					<gui_name type="string">561</gui_name>
					<color type="string">255,255,0</color>
					<amplitude_modulation>
						<hw_fn_name>ctech_aotf.ch561</hw_fn_name>
					</amplitude_modulation>

					<analog_modulation>
						<hw_fn_name type="string">daq.ilm561.ao_task</hw_fn_name>
						<max_voltage type="float">1.0</max_voltage>
						<min_voltage type="float">0.0</min_voltage>
					</analog_modulation>   

					<mechanical_shutter>
						<hw_fn_name type="string">daq.ilm561sh.do_task</hw_fn_name>
					</mechanical_shutter>

				</ch2>

				<ch3>
					<gui_name type="string">532</gui_name>
					<color type="string">0,255,0</color>
					<amplitude_modulation>
						<hw_fn_name>ctech_aotf.ch532</hw_fn_name>
					</amplitude_modulation>

					<analog_modulation>
						<hw_fn_name type="string">daq.ilm532.ao_task</hw_fn_name>
						<max_voltage type="float">1.0</max_voltage>
						<min_voltage type="float">0.0</min_voltage>
					</analog_modulation>          

					<mechanical_shutter>
						<hw_fn_name type="string">daq.ilm532sh.do_task</hw_fn_name>
					</mechanical_shutter>	


				</ch3>

				<ch4>
					<gui_name type="string">514</gui_name>
					<color type="string">0,255,100</color>
					<amplitude_modulation>
						<hw_fn_name>ctech_aotf.ch514</hw_fn_name>
					</amplitude_modulation>

					<analog_modulation>
						<hw_fn_name type="string">daq.ilm514.ao_task</hw_fn_name>
						<max_voltage type="float">1.0</max_voltage>
						<min_voltage type="float">0.0</min_voltage>
					</analog_modulation>  

					<mechanical_shutter>
						<hw_fn_name type="string">daq.ilm514sh.do_task</hw_fn_name>
					</mechanical_shutter>		


				</ch4>
				<ch5>
					<gui_name type="string">488</gui_name>
					<color type="string">0,255,255</color>
					<amplitude_modulation>
						<hw_fn_name>ctech_aotf.ch488</hw_fn_name>
					</amplitude_modulation>

					<analog_modulation>
						<hw_fn_name type="string">daq.ilm488.ao_task</hw_fn_name>
						<max_voltage type="float">1.0</max_voltage>
						<min_voltage type="float">0.0</min_voltage>
					</analog_modulation>  

					<mechanical_shutter>
						<hw_fn_name type="string">daq.ilm488sh.do_task</hw_fn_name>
					</mechanical_shutter>


				</ch5>

				<ch6>
					<gui_name type="string">405</gui_name>
					<color type="string">255,0,255</color>

					<amplitude_modulation>
						<hw_fn_name>obis405</hw_fn_name>
					</amplitude_modulation>

					<analog_modulation>
						<hw_fn_name type="string">daq.ilm405.ao_task</hw_fn_name>
						<max_voltage type="float">5.0</max_voltage>
						<min_voltage type="float">0.0</min_voltage>
					</analog_modulation>

				</ch6>

			</configuration>
  	</illumination>

   	<ldc_irlaser>
      <module_name type="string">storm_control.sc_hardware.thorlabs.LDCModule</module_name>
      <class_name type="string">LDCIRLaserModule</class_name>

      <configuration>
				<ct_fn_name type="string">daq.ir_laser.ct_task</ct_fn_name>
      </configuration>
    </ldc_irlaser>

  	<!-- Coherent OBIS 405 laser control. -->
	  <obis405>
		  <module_name type="string">storm_control.sc_hardware.coherent.coherentModule</module_name>
		  <class_name type="string">CoherentObis</class_name>

		  <configuration>
			  <port type="string">COM14</port>
			  <used_during_filming type="boolean">True</used_during_filming>
				<maximum type="int">10000</maximum>
		  </configuration>
	  </obis405>

  	<focuslock>
      <class_name type="string">FocusLock</class_name>
      <module_name type="string">storm_control.hal4000.focusLock.focusLock</module_name>
      <configuration>
	  
				<!-- Turning on Diagnostic mode will save the focus lock movie as a tiff -->
				<diagnostics_mode type="boolean">False</diagnostics_mode>
				
				<ir_laser type="string">ldc_irlaser</ir_laser>
				<ir_power type="int">10</ir_power>
				<lock_modes type="string">NoLockMode,AutoLockMode,AlwaysOnLockMode,OptimalLockMode,CalibrationLockMode,DiagnosticsLockMode</lock_modes>
				<qpd type="string">pgrey_camera</qpd>
				<z_stage type="string">mcl_zstage</z_stage>

				<parameters>
				  <find_sum>
				    <step_size type="float">1.0</step_size>
				  </find_sum>
				  <locked>
				    <buffer_length type="int">5</buffer_length>
				    <offset_threshold type="float">20.0</offset_threshold>
				  </locked>
				  <jump_size type="float">0.1</jump_size>
				  
				</parameters>
      </configuration>
    </focuslock>

		<!-- Point Grey camera for the focus lock -->
    <pgrey_camera>
      <class_name type="string">PointGreyLockCamera</class_name>
      <module_name type="string">storm_control.sc_hardware.pointGrey.pointGreyLockCameraModule</module_name>
      <configuration>
				<parameters>
				  <offset_has_center_bar type="boolean">True</offset_has_center_bar>
				  <offset_maximum type="float">1.0</offset_maximum>
				  <offset_minimum type="float">-1.0</offset_minimum>
				  <offset_warning_high type="float">0.8</offset_warning_high>
				  <offset_warning_low type="float">-0.8</offset_warning_low>
				  <sum_maximum type="float">500.0</sum_maximum>
				  <sum_minimum type="float">0.0</sum_minimum>
				  <sum_warning_low type="float">50.0</sum_warning_low>
				  
				</parameters>
				<auto_focus type="boolean">True</auto_focus>
				<!-- device id from spinview-->
				<camera_id type="string">21177886</camera_id>
				<camera_parameters>
				  
				  <BlackLevel type="float">1.0</BlackLevel>
				  <Gain type="float">10.0</Gain>
				  
				  <!--looks like exposure time is hard coded into pointGreyLockCamera.py ~line 110-->
				  <AcquisitionFrameRate type="float">30.0</AcquisitionFrameRate>
				  <exposure_time type="float">0.010001999999999999</exposure_time>
				  
				  <video_mode type="string">Mode0</video_mode>
				  <PixelFormat type="string">Mono16</PixelFormat>
				  
				  <!-- are the following params useful?-->
				  <!--
				  <x_bin type="int">1</x_bin>
			      <x_end type="int">1439</x_end>
			      <x_pixels type="int">756</x_pixels>
			      <x_start type="int">397</x_start>
			      <y_bin type="int">1</y_bin>
			      <y_end type="int">1079</y_end>
			      <y_pixels type="int">128</y_pixels>
			      <y_start type="int">757</y_start>
				  <WidthMax type="int">1440</WidthMax>
				  <HeightMax type="int">1080</HeightMax>
				  -->
				  
				  <!--set the roi for the two spots -->
				  <Height type="int">128</Height>
				  <Width type="int">512</Width>
				  <OffsetX type="int">512</OffsetX>
				  <OffsetY type="int">672</OffsetY>
				  
				  

				  	
				  <background type="float">1.0</background>
				  <downsample type="int">1</downsample>
			      <offset type="float">0.0</offset>
				  <min_good type="int">5</min_good>
				  <reps type="int">5</reps>
				  <sigma type="float">15.0</sigma>
				  <sum_scale type="float">0.1</sum_scale>
				  <sum_zero type="float">4.0</sum_zero>
				  <threshold type="float">200.0</threshold>
				  <zero_dist type="float">400.2</zero_dist>

				  <!-- Not sure what ROI is doing here -->
				  <roi1 type="string">0,128,0,256</roi1>
				  <roi2 type="string">0,128,256,512</roi2>
				 
				<!--  <presets> -->
				<!-- FLIR camera general properties -->
				<!--
			    <PixelFormat type="string">Mono16</PixelFormat>
				<ExposureAuto type="string">Off</ExposureAuto>
				<GainAuto type="string">Off</GainAuto>
				<BlackLevelClampingEnable type="boolean">False</BlackLevelClampingEnable>
				<AcquisitionFrameRateEnable type="boolean">True</AcquisitionFrameRateEnable>
				<CameraControlExposure type="boolean">False</CameraControlExposure>
				-->

				</camera_parameters>
				<units_to_microns type="float">-0.1</units_to_microns>
      </configuration>
    </pgrey_camera>
	
	
		<!-- Progression control GUI -->
		<progressions>
			<module_name type="string">storm_control.hal4000.progressions.progressions</module_name>
			<class_name type="string">Progressions</class_name>
			<configuration>
				<illumination_functionality type="string">illumination</illumination_functionality>
				<frames type="int">100</frames>
				<increment type="float">0.01</increment>
				<starting_value type="float">0.1</starting_value>

			</configuration>
		</progressions>

		<!-- Spot counter and GUI -->
		<spotcounter>
			<module_name type="string">storm_control.hal4000.spotCounter.spotCounter</module_name>
			<class_name type="string">SpotCounter</class_name>
			<configuration>
				<max_threads type="int">4</max_threads>
				<max_size type="int">263000</max_size>
			</configuration>
		</spotcounter>
		
		<!-- Stage control GUI -->
    <stage>
      <class_name type="string">Stage</class_name>
      <module_name type="string">storm_control.hal4000.stage.stage</module_name>
      <configuration>
				<stage_functionality type="string">marz_stage</stage_functionality>
      </configuration>
    </stage>
	
		<!-- Marzhauser microscope stage -->
		<marz_stage>
			<module_name type="string">storm_control.sc_hardware.marzhauser.marzhauserModule</module_name>
			<class_name type="string">MarzhauserStage</class_name>
			<configuration>
				<port type="string">COM6</port>
				<baudrate type="int">57600</baudrate>
				<velocity type="int">1</velocity>  <!-- 0.4 for MF6 -->
				<acceleration type="string">0.1</acceleration> <!-- from MF6 -->
				<wait_time type="float">1.0e-3</wait_time>
			</configuration>
		</marz_stage>

 		<!-- TCP control -->
    <tcp_control>
      <module_name type="string">storm_control.hal4000.tcpControl.tcpControl</module_name>
      <class_name type="string">TCPControl</class_name>
      <configuration>
        <parallel_mode type="boolean">True</parallel_mode>
        <tcp_port type="int">9000</tcp_port>
      </configuration>
    </tcp_control>
  </modules>
</config>
