<?xml version="1.0" encoding="ISO-8859-1"?>
<config>

  <!-- The starting directory. -->
  <directory type="directory">E:/default/</directory>

  <!-- The setup name -->
  <setup_name type="string">Yuan_test</setup_name>

  <!-- The ui type, this is 'classic' or 'detached' -->
  <ui_type type="string">detached</ui_type>

  <!--
      This has two effects:
      
      (1) If this is True any exception will immediately crash HAL, which can
      be useful for debugging. If it is False then some exceptions will be
      handled by the modules.
      
      (2) If it is False we also don't check whether messages are valid.
  -->
  <strict type="boolean">True</strict>
  
  <!--
      Define the modules to use for this setup.
  -->
  <modules>

    <!--
	This is the main window, you must have this.
    -->
    <hal>
			<class_name type="string">HalController</class_name>
      <module_name type="string">storm_control.hal4000.hal4000</module_name>
    </hal>

    <!--
	You also need all of these.
    -->

    <!-- Camera display. -->
    <display>
      <class_name type="string">Display</class_name>
      <module_name type="string">storm_control.hal4000.display.display</module_name>
      <parameters>

				<!-- The default color table. Other options are in hal4000/colorTables/all_tables -->
				<colortable type="string">idl5.ctbl</colortable>
				
      </parameters>
    </display>
    
    <!-- Feeds. -->
    <feeds>
      <class_name type="string">Feeds</class_name>
      <module_name type="string">storm_control.hal4000.feeds.feeds</module_name>
      <configuration>
		    <illumination_functionality type="string">illumination</illumination_functionality>
	    </configuration>
    </feeds>

    <!-- Filming and starting/stopping the camera. -->
    <film>
      <class_name type="string">Film</class_name>
      <module_name type="string">storm_control.hal4000.film.film</module_name>

      <!-- Film parameters specific to this setup go here. -->
      <parameters>
				<extension desc="Movie file name extension" type="string" values=",Red,Green,Blue"></extension>
      </parameters>
    </film>

    <!-- Which objective is being used, etc. -->
    <mosaic>
      <class_name type="string">Mosaic</class_name>
      <module_name type="string">storm_control.hal4000.mosaic.mosaic</module_name>

      <!-- List objectives available on this setup here. -->
      <parameters>
				<flip_horizontal desc="Flip image horizontal (mosaic)" type="boolean">False</flip_horizontal>
				<flip_vertical desc="Flip image vertical (mosaic)" type="boolean">False</flip_vertical>
				<transpose desc="Transpose image (mosaic)" type="boolean">False</transpose>

				<objective desc="Current objective" type="string" values="obj1,obj2,obj3">obj1</objective>
				<obj1 desc="Objective 1" type="custom">100x,0.160,0.0,0.0</obj1>
				<obj2 desc="Objective 2" type="custom">10x,1.60,0.0,0.0</obj2>
				<obj3 desc="Objective 3" type="custom">4x,4.0,0.0,0.0</obj3>	
      </parameters>
    </mosaic>

    <!-- Loading, changing and editting settings/parameters -->
    <settings>
      <class_name type="string">Settings</class_name>
      <module_name type="string">storm_control.hal4000.settings.settings</module_name>
    </settings>

    <!-- Set the time base for films. -->
    <timing>
      <class_name type="string">Timing</class_name>
      <module_name type="string">storm_control.hal4000.timing.timing</module_name>
      <parameters>
				<time_base type="string">camera1</time_base>
      </parameters>
    </timing>
  
    <!--
			Everything else is optional, but you probably want at least one camera.
    -->


    <!-- Camera control. -->
    <!--
      Note that the cameras must have the names "camera1", "camera2", etc..
      
      Cameras are either "master" (they provide their own hardware timing)
      or "slave" they are timed by another camera. Each time the cameras
      are started the slave cameras are started first, then the master cameras.
    -->
 
    <camera1>
      <class_name type="string">Camera</class_name>
      <module_name type="string">storm_control.hal4000.camera.camera</module_name>
      <camera>
        <master type="boolean">True</master>
        <class_name type="string">NoneCameraControl</class_name>
        <module_name type="string">storm_control.hal4000.camera.noneCameraControl</module_name>
        <parameters>
          <roll type="float">1.0</roll>
          <default_max type="int">300</default_max> 
          <default_min type="int">0</default_min>
          <flip_horizontal type="boolean">False</flip_horizontal>
          <flip_vertical type="boolean">False</flip_vertical>
          <transpose type="boolean">False</transpose>
          <extension type="string"></extension>
          <saved type="boolean">True</saved>

        </parameters>
      </camera>
    </camera1>

    <daq>
      <module_name type="string">storm_control.sc_hardware.nationalInstruments.nidaqModule</module_name>
      <class_name type="string">NidaqModule</class_name>

      <configuration>

        <!-- These are the things that we provide DAQ functionality for.
             Other modules will request them with a 'get functionality'
             message and "name" = "daq.xxx.yyy". -->
        <!-- TODO: CTR -->
        <timing>
          <camera_fire_pin type="string">/Dev1/PFI0</camera_fire_pin>
          <counter type="string">/Dev1/ctr0</counter>
          <counter_out type="string">/Dev1/ctr0out</counter_out>
        </timing>

        <ilm405>
          <do_task>
            <source type="string">/Dev1/port0/line6</source>
          </do_task>
        </ilm405> 
      </configuration>
    </daq>


    <obis405>
      <module_name type="string">storm_control.sc_hardware.coherent.coherentModule</module_name>
      <class_name type="string">CoherentObis</class_name>
      <!-- TODO: 405 COM -->
      <configuration>
        <port type="string">COM5</port>
        <used_during_filming type="boolean">True</used_during_filming>
        <maximum type="int">10000</maximum>
      </configuration>
    </obis405>

    <!-- Illumination (lasers, shutters, etc) control GUI. -->
    <illumination>
      <class_name type="string">Illumination</class_name>
      <module_name type="string">storm_control.hal4000.illumination.illumination</module_name>
      <configuration>

        <!-- Note: The name of the channel is the gui_name.
             XML tags cannot start with numbers. -->
        <ch1>
          <gui_name type="string">750</gui_name>
          <color type="string">200,0,0</color>
          <amplitude_modulation>
            <hw_fn_name>none_wheel1</hw_fn_name>
          </amplitude_modulation>
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm750.do_task</hw_fn_name>
          </digital_modulation>
        </ch1>
        <ch6>
          <gui_name type="string">405</gui_name>
          <color type="string">255,0,255</color>
          <amplitude_modulation>
            <hw_fn_name>obis405</hw_fn_name>
          </amplitude_modulation>
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm405.do_task</hw_fn_name>
            <max_voltage type="float">5.0</max_voltage>
            <min_voltage type="float">0.0</min_voltage>
          </digital_modulation>
        </ch6>
      </configuration>
    </illumination>

  </modules>
  
</config>
