<?xml version="1.0" encoding="ISO-8859-1"?>
<config>

  <!-- The starting directory. -->
  <directory type="directory">E:/default/</directory>

  <!-- The setup name -->
  <setup_name type="string">Yuan_test</setup_name>

  <!-- The ui type, this is 'classic' or 'detached' -->
  <ui_type type="string">detached</ui_type>

  <!--
      This has two effects:
      
      (1) If this is True any exception will immediately crash HAL, which can
      be useful for debugging. If it is False then some exceptions will be
      handled by the modules.
      
      (2) If it is False we also don't check whether messages are valid.
  -->
  <strict type="boolean">True</strict>
  
  <!--
      Define the modules to use for this setup.
  -->
  <modules>

    <!--
	This is the main window, you must have this.
    -->
    <hal>
			<class_name type="string">HalController</class_name>
      <module_name type="string">storm_control.hal4000.hal4000</module_name>
    </hal>

    <!--
	You also need all of these.
    -->

    <!-- Camera display. -->
    <display>
      <class_name type="string">Display</class_name>
      <module_name type="string">storm_control.hal4000.display.display</module_name>
      <parameters>

				<!-- The default color table. Other options are in hal4000/colorTables/all_tables -->
				<colortable type="string">idl5.ctbl</colortable>
				
      </parameters>
    </display>
    
    <!-- Feeds. -->
    <feeds>
      <class_name type="string">Feeds</class_name>
      <module_name type="string">storm_control.hal4000.feeds.feeds</module_name>
      <configuration>
		    <illumination_functionality type="string">illumination</illumination_functionality>
	    </configuration>
    </feeds>

    <!-- Filming and starting/stopping the camera. -->
    <film>
      <class_name type="string">Film</class_name>
      <module_name type="string">storm_control.hal4000.film.film</module_name>

      <!-- Film parameters specific to this setup go here. -->
      <parameters>
				<extension desc="Movie file name extension" type="string" values=",Red,Green,Blue"></extension>
      </parameters>
    </film>

    <!-- Which objective is being used, etc. -->
    <mosaic>
      <class_name type="string">Mosaic</class_name>
      <module_name type="string">storm_control.hal4000.mosaic.mosaic</module_name>

      <!-- List objectives available on this setup here. -->
      <parameters>
				<flip_horizontal desc="Flip image horizontal (mosaic)" type="boolean">False</flip_horizontal>
				<flip_vertical desc="Flip image vertical (mosaic)" type="boolean">False</flip_vertical>
				<transpose desc="Transpose image (mosaic)" type="boolean">False</transpose>

				<objective desc="Current objective" type="string" values="obj1,obj2,obj3">obj1</objective>
				<obj1 desc="Objective 1" type="custom">100x,0.160,0.0,0.0</obj1>
				<obj2 desc="Objective 2" type="custom">10x,1.60,0.0,0.0</obj2>
				<obj3 desc="Objective 3" type="custom">4x,4.0,0.0,0.0</obj3>	
      </parameters>
    </mosaic>

    <!-- Loading, changing and editting settings/parameters -->
    <settings>
      <class_name type="string">Settings</class_name>
      <module_name type="string">storm_control.hal4000.settings.settings</module_name>
    </settings>

    <!-- Set the time base for films. -->
    <timing>
      <class_name type="string">Timing</class_name>
      <module_name type="string">storm_control.hal4000.timing.timing</module_name>
      <parameters>
				<time_base type="string">camera1</time_base>
      </parameters>
    </timing>
  
    <!--
			Everything else is optional, but you probably want at least one camera.
    -->


    <!-- Camera control. -->
    <!--
      Note that the cameras must have the names "camera1", "camera2", etc..
      
      Cameras are either "master" (they provide their own hardware timing)
      or "slave" they are timed by another camera. Each time the cameras
      are started the slave cameras are started first, then the master cameras.
    -->
 
    <camera1>
      <class_name type="string">Camera</class_name>
      <module_name type="string">storm_control.hal4000.camera.camera</module_name>
      <camera>
        <master type="boolean">True</master>
        <class_name type="string">NoneCameraControl</class_name>
        <module_name type="string">storm_control.hal4000.camera.noneCameraControl</module_name>
        <parameters>
          <roll type="float">1.0</roll>
          <default_max type="int">300</default_max> 
          <default_min type="int">0</default_min>
          <flip_horizontal type="boolean">False</flip_horizontal>
          <flip_vertical type="boolean">False</flip_vertical>
          <transpose type="boolean">False</transpose>
          <extension type="string"></extension>
          <saved type="boolean">True</saved>

        </parameters>
      </camera>
    </camera1>

    <!-- Focus lock control GUI. -->
    <focuslock>
      <class_name type="string">FocusLock</class_name>
      <module_name type="string">storm_control.hal4000.focusLock.focusLock</module_name>
      <configuration>
        <ir_laser type="string">none_irlaser</ir_laser>
        <ir_power type="int">10</ir_power>
        <lock_modes type="string">NoLockMode,AutoLockMode,AlwaysOnLockMode,OptimalLockMode,CalibrationLockMode</lock_modes>
        <qpd type="string">none_qpd</qpd>
        <z_stage type="string">mcl_zstage</z_stage>
        <parameters>
          <find_sum>
            <step_size type="float">1.0</step_size>
          </find_sum>
          <locked>
            <buffer_length type="int">5</buffer_length>
            <offset_threshold type="float">20.0</offset_threshold>
          </locked>
          <jump_size type="float">0.1</jump_size>
        </parameters>
      </configuration>
    </focuslock>

    <none_irlaser>
      <module_name type="string">storm_control.sc_hardware.none.noneIRLaserModule</module_name>
      <class_name type="string">NoneIRLaserModule</class_name>
    </none_irlaser>
    
    <none_qpd>
      <module_name type="string">storm_control.sc_hardware.none.noneQPDModule</module_name>
      <class_name type="string">NoneQPDModule</class_name>

      <configuration>
        <parameters>
          <max_voltage type="float">10.0</max_voltage>
          <min_voltage type="float">-10.0</min_voltage>
          <offset_has_center_bar type="boolean">True</offset_has_center_bar>
          <offset_maximum type="float">0.6</offset_maximum>
          <offset_minimum type="float">-0.6</offset_minimum>
          <offset_warning_high type="float">0.5</offset_warning_high>
          <offset_warning_low type="float">-0.5</offset_warning_low>
          <sum_maximum type="float">1000.0</sum_maximum>
          <sum_minimum type="float">0.0</sum_minimum>
          <sum_warning_low type="float">100.0</sum_warning_low>
        </parameters>
        <units_to_microns type="float">1.0</units_to_microns>

        <!-- These are for simulation / testing -->
        <noise type="float">0.5e-2</noise>
        <tilt type="float">1.0e-3</tilt>
        <xy_stage_fn type="string">none_stage</xy_stage_fn>
        <z_stage_fn type="string">none_zstage</z_stage_fn>
      </configuration>
    </none_qpd>


    <mcl_zstage>
      <!-- Yuan: which module to use? Answer: 2 module, 1 for USB and 1 for DAQ card-->
      <module_name type="string">storm_control.sc_hardware.madCityLabs.mclModule</module_name>
      <class_name type="string">MCLZStage</class_name>
      <configuration>
        <parameters>
          <center type="float">50.0</center>
          <has_center_bar type="boolean">True</has_center_bar>
          <maximum type="float">100.0</maximum>
          <minimum type="float">0.0</minimum>
          <warning_high type="float">95.0</warning_high>
          <warning_low type="float">5.0</warning_low>
        </parameters>
        <mcl_lib type = "string">C:\Program Files\Mad City Labs\NanoDrive\Madlib</mcl_lib>
        
        <!--what is the correct voltage conversion for this MCL?-->
        <!-- these are for analog control
        <ao_fn_name type="string">daq.mcl.ao_task</ao_fn_name>
        <microns_to_volts type="float">0.029</microns_to_volts>
          -->
        
    </configuration>
    </mcl_zstage>


  </modules>
  
</config>