<?xml version="1.0" encoding="ISO-8859-1"?>
<config>

  <!-- The starting directory. -->
  <directory type="directory">D:/Default/</directory>
  
  <!-- The setup name -->
  <setup_name type="string">Turnkey</setup_name>

  <!-- The ui type, this is 'classic' or 'detached' -->
  <ui_type type="string">detached</ui_type>

  <!--
      This has two effects:
      
      (1) If this is True any exception will immediately crash HAL, which can
      be useful for debugging. If it is False then some exceptions will be
      handled by the modules.
      
      (2) If it is False we also don't check whether messages are valid.
  -->
  <strict type="boolean">True</strict>
  
  <!--
      Define the modules to use for this setup.
  -->
  <modules>

    <!--
  This is the main window, you must have this.
    -->
    <hal>
      <class_name type="string">HalController</class_name>
      <module_name type="string">storm_control.hal4000.hal4000</module_name>
    </hal>

    <!--
  You also need all of these.
    -->

    <!-- Camera display. -->
    <display>
      <class_name type="string">Display</class_name>
      <module_name type="string">storm_control.hal4000.display.display</module_name>
      <parameters>

  <!-- The default color table. Other options are in hal4000/colorTables/all_tables -->
  <colortable type="string">ramp.ctbl</colortable>

      </parameters>
    </display>
    
    <!-- Feeds. -->
    <feeds>
      <class_name type="string">Feeds</class_name>
      <module_name type="string">storm_control.hal4000.feeds.feeds</module_name>
    </feeds>

    <!-- Filming and starting/stopping the camera. -->
    <film>
      <class_name type="string">Film</class_name>
      <module_name type="string">storm_control.hal4000.film.film</module_name>

      <!-- Film parameters specific to this setup go here. -->
      <parameters>
  <extension desc="Movie file name extension" type="string" values=",DAPI, CFP, GFP, YFP, CY3, TXRED, CY5, CY7"></extension>
      </parameters>
    </film>

    <!-- Which objective is being used, etc. -->
    <mosaic>
      <class_name type="string">Mosaic</class_name>
      <module_name type="string">storm_control.hal4000.mosaic.mosaic</module_name>

      <!-- List objectives available on this setup here. -->
      <parameters>
  <flip_horizontal desc="Flip image horizontal (mosaic)" type="boolean">False</flip_horizontal>
  <flip_vertical desc="Flip image vertical (mosaic)" type="boolean">False</flip_vertical>
  <transpose desc="Transpose image (mosaic)" type="boolean">False</transpose>

  <objective desc="Current objective" type="string" values="obj1,obj2">obj1</objective>
  <obj1 desc="Objective 1" type="custom">100x,0.160,0.0,0.0</obj1>
  <obj2 desc="Objective 2" type="custom">10x,1.6,0.0,0.0</obj2> 
      </parameters>
    </mosaic>

    <!-- Loading, changing and editting settings/parameters -->
    <settings>
      <class_name type="string">Settings</class_name>
      <module_name type="string">storm_control.hal4000.settings.settings</module_name>
    </settings>

    <!-- Set the time base for films. -->
    <timing>
      <class_name type="string">Timing</class_name>
      <module_name type="string">storm_control.hal4000.timing.timing</module_name>
      <parameters>
          <time_base type="string">camera1</time_base>
      </parameters>
    </timing>
  

<!-- Filter wheel control GUI. -->


    <misc_control>
      <class_name type="string">TurnkeyMiscControl</class_name>
      <module_name type="string">storm_control.hal4000.miscControl.TurnkeyMiscControl</module_name>
      <configuration>
        <mirror_turret type="string">cbm</mirror_turret>
        <filters type="string">DAPI, CFP, GFP, YFP, CY3, TXRED, CY5, CY7</filters>
        <parameters>
          <port type="string">COM4</port>
          <baud_rate type="int">19200</baud_rate>
        </parameters>
      </configuration>
    </misc_control>


       <!-- TCP control -->
    <tcp_control>
      <module_name type="string">storm_control.hal4000.tcpControl.tcpControl</module_name>
      <class_name type="string">TCPControl</class_name>     
      <configuration>
        <parallel_mode type="boolean">True</parallel_mode>
        <tcp_port type="int">9000</tcp_port>
      </configuration>
    </tcp_control>
  </modules>

  
</config>